<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>LVP</port:Name>
          <port:PortName>COM3</port:PortName>
          <port:BaudRate>9600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>false</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>A</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>BrightnessSetRequest</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="Brightness" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:GenerateLvpSetBrightnessMessage">
                  <p1:DeviceNumber>5</p1:DeviceNumber>
                  <p1:ControlledDevice>0</p1:ControlledDevice>
                  <p1:Brightness>0</p1:Brightness>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="port:SerialWrite">
                  <port:PortName>LVP</port:PortName>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Concat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>C</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>GetCommunicationStatus</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:GenerateLvpCheckCommunicationMessage">
                  <p1:DeviceNumber>5</p1:DeviceNumber>
                  <p1:ControlledDevice>1</p1:ControlledDevice>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="port:SerialWrite">
                  <port:PortName>LVP</port:PortName>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:AsyncSubject">
                <Name>Request</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Request</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="port:SerialRead">
                  <port:PortName>LVP</port:PortName>
                  <port:Count>13</port:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Concat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="wie:KeyDown">
            <wie:Filter>P</wie:Filter>
            <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>GetProcessorStatus</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="ExternalizedMapping">
                <Property Name="StateRequestByte" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:GenerateLvpCheckProcessorMessage">
                  <p1:DeviceNumber>5</p1:DeviceNumber>
                  <p1:ControlledDevice>1</p1:ControlledDevice>
                  <p1:StateRequestByte>0</p1:StateRequestByte>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="port:SerialWrite">
                  <port:PortName>LVP</port:PortName>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:AsyncSubject">
                <Name>Request</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Request</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="port:SerialRead">
                  <port:PortName>LVP</port:PortName>
                  <port:Count>13</port:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Concat" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Merge" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Merge" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>BrightnessMinRequest</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Brightness" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GenerateLvpSetBrightnessMessage">
                <p1:DeviceNumber>5</p1:DeviceNumber>
                <p1:ControlledDevice>0</p1:ControlledDevice>
                <p1:Brightness>0</p1:Brightness>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWrite">
                <port:PortName>LVP</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>BrightnessMaxRequest</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Brightness" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GenerateLvpSetBrightnessMessage">
                <p1:DeviceNumber>5</p1:DeviceNumber>
                <p1:ControlledDevice>0</p1:ControlledDevice>
                <p1:Brightness>64</p1:Brightness>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWrite">
                <port:PortName>LVP</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="10" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source3" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>